<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>1000000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Cell"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Cell" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Cell">10.0</Energy>
      <Energy Type1="Cell" Type2="Cell">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="ExternalPotential">
      <Algorithm>CenterOfMassBased</Algorithm>
   </Plugin>
   
   <Plugin Name="PixelTracker">
   
   <!-- Module tracking pixels of each cell -->
</Plugin>

   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="Field">
         <DiffusionData>
            <FieldName>Field</FieldName>
            <GlobalDiffusionConstant>0.0</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <!-- Additional options are: -->
            <InitialConcentrationExpression>x*(1./100.)</InitialConcentrationExpression>
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="Cell">0.0</DiffusionCoefficient>
            <DecayCoefficient CellType="Cell">0.0</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="Cell">0.0</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="Cell" Type="Cell">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="Cell">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="1.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
               <!-- <ConstantDerivative PlanePosition="Max" Value="5.0"/> -->
               <!-- Other options are (examples): -->
               <Periodic/>
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="45" y="45" z="0"/>
         <BoxMax x="55" y="55" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>Cell</Types>
      </Region>
   </Steppable>
</CompuCell3D>
