<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="cell"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="cell" LambdaVolume="2.0" TargetVolume="100"/>
   </Plugin>
   
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="cell" LambdaSurface="2.0" TargetSurface="100"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="0" y="0" z="0"/>
         <BoxMax x="10" y="10" z="1"/>
         <Gap>0</Gap>
         <Width>2</Width>
         <Types>cell</Types>
      </Region>
   </Steppable>
</CompuCell3D>
